OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector => #1
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
-> 2D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#1 -> 3D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 1
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#1 -> Common Average Reference
-> Signal Cleanup
  LowCutFrequency = 1
  HighCutFrequency = 100
  NotchLowFrequency = 48
  NotchHighFrequency = 52
-> Independent Component Analysis (FastICA)
  Number of components to extract = 4
  Operating mode = ICA
  Sample size (seconds) for estimation = 120
  Decomposition type = Symmetric
  Max number of reps for the ICA convergence = 100000
  Fine tuning = true
  Max number of reps for the fine tuning = 100
  Used nonlinearity = Tanh
  Internal Mu parameter for FastICA = 1.0
  Internal Epsilon parameter for FastICA = 0.0001
  Spatial filter filename =
  Save the spatial filter/demixing matrix = false
#1 -> Spectral Analysis => #7
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#7.Amplitude -> Instant Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#1, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
