OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)

Generic stream reader => #0
  Filename =
#0.Output Signal -> Reference Channel
  Channel = Ref_Nose
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Temporal Filter => #4
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#4, Input stimulations=#0.Output Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_00
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = x
-> Feature aggregator => #9
Input signal=#4, Input stimulations=#0.Output Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_00
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Simple DSP
  Equation = x
-> Feature aggregator => #13
Stimulations=#0.Output Stimulations, Features for class 1=#9, Features for class 2=#13 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Path_UserData}/my-classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Pause
